PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  expName = block_design
  Screen = 1
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Routines
  Routine welcome
    TextComponent text
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Welcome to the experiment!

        Here you will press with your
        right index finger everytime you
        see a red square and your right middle
        finger every time you see a blue square
  Routine trial
    PolygonComponent square
      fillColor [set every repeat] = $stim
      stopVal [duration (s)] = 1.0
      lineColor [set every repeat] = $stim
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    KeyboardComponent keyboard
      correctAns = $ans
      storeCorrect = True
      stopVal [duration (s)] = 1.0
      forceEndRoutine = False
      allowedKeys = "2","3"
      startVal [time (s)] = 0.0
      store = first key
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    PolygonComponent iti_square
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $trial_len - 0.75
      startVal [time (s)] = 0.75
      size = (0.5, 0.5)
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  Routine exit
    TextComponent done
      text = Thank you for participating!
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine pretrial
    CodeComponent set_null
      Begin Routine:
        if stim is None or stim == "NULL":
            stim = 'white'
  Routine scantrigger
    KeyboardComponent scan_trigger
      correctAns = 'asciicircum'
      forceEndRoutine = True
      allowedKeys = 'asciicircum','equal'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent scan_trigger_text
      text = Waiting for scan trigger...
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine scannerwarmup
    PolygonComponent warmup_square
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 6.0
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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Flow
  Routine welcome
  Routine scantrigger
  Routine scannerwarmup
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = block_rt.csv
    random seed = 1
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'trial_len': 2, u'stim': u'red', u'ans': 2.0},
      {u'trial_len': 2, u'stim': u'blue', u'ans': 3.0},
      {u'trial_len': 2, u'stim': u'red', u'ans': 2.0},
      {u'trial_len': 2, u'stim': u'blue', u'ans': 3.0},
      {u'trial_len': 2, u'stim': u'red', u'ans': 2.0},
      {u'trial_len': 2, u'stim': u'red', u'ans': 2.0},
      {u'trial_len': 2, u'stim': u'blue', u'ans': 3.0},
      {u'trial_len': 2, u'stim': u'red', u'ans': 2.0},
      {u'trial_len': 2, u'stim': u'red', u'ans': 2.0},
      {u'trial_len': 2, u'stim': u'red', u'ans': 2.0},
      {u'trial_len': 2, u'stim': u'red', u'ans': 2.0},
      {u'trial_len': 2, u'stim': u'blue', u'ans': 3.0},
      {u'trial_len': 2, u'stim': u'red', u'ans': 2.0},
      {u'trial_len': 2, u'stim': u'red', u'ans': 2.0},
      {u'trial_len': 2, u'stim': u'blue', u'ans': 3.0},
      {u'trial_len': 2, u'stim': u'red', u'ans': 2.0},
      {u'trial_len': 2, u'stim': u'blue', u'ans': 3.0},
      {u'trial_len': 2, u'stim': u'blue', u'ans': 3.0},
      {u'trial_len': 2, u'stim': u'blue', u'ans': 3.0},
      {u'trial_len': 2, u'stim': u'red', u'ans': 2.0},
      {u'trial_len': 2, u'stim': u'red', u'ans': 2.0},
      {u'trial_len': 2, u'stim': u'red', u'ans': 2.0},
      {u'trial_len': 2, u'stim': u'blue', u'ans': 3.0},
      {u'trial_len': 2, u'stim': u'blue', u'ans': 3.0},
      {u'trial_len': 2, u'stim': u'red', u'ans': 2.0},
      {u'trial_len': 2, u'stim': u'blue', u'ans': 3.0},
      {u'trial_len': 2, u'stim': u'blue', u'ans': 3.0},
      {u'trial_len': 2, u'stim': u'blue', u'ans': 3.0},
      {u'trial_len': 2, u'stim': u'blue', u'ans': 3.0},
      {u'trial_len': 2, u'stim': u'blue', u'ans': 3.0},
      {u'trial_len': 30, u'stim': None, u'ans': None}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
    Routine pretrial
    Routine trial
  LoopTerminator trials
  Routine exit
