PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  expName = event_design
  Screen = 1
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Routines
  Routine trial
    PolygonComponent square
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    StaticComponent inter_trial_interval
      stopVal [duration (s)] = $iti
      startVal [time (s)] = 1
    KeyboardComponent keyboard
      stopVal [duration (s)] = 1.0
      forceEndRoutine = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine welcome
    TextComponent text
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Welcome to the experiment!

        Here you will press with your
        left index finger everytime you
        see a square
  Routine scantrigger
    KeyboardComponent scan_trigger
      forceEndRoutine = True
      allowedKeys = ['y','^']
      startVal [time (s)] = 0.0
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    TextComponent scan_trigger_text
      text = Waiting for scan trigger...
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine welcome
  Routine scantrigger
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = event_rt.csv
    random seed = 1
    loopType = random
    nReps = 2
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    conditions:
      [{u'iti': 2},
      {u'iti': 4},
      {u'iti': 6},
      {u'iti': 8},
      {u'iti': 10},
      {u'iti': 12},
      {u'iti': 14},
      {u'iti': 16}]
    Routine trial
  LoopTerminator trials
